CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:400
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "merged_composites")
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):12,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:DAPI
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:IdentifySecondaryObjects
    Name the output image:composite_mask
    Select the color format:uint16
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:composite_mask
    Select method for constructing file names:Single name
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    Enter single file name:composite_mask
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    Saved file format:tiff
    Output file location:Elsewhere...|output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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